{
  "Name": "Orthanc-modality",
	"RemoteAccessAllowed" : true,
	"AuthenticationEnabled" : true,
	"RegisteredUsers" : {
		"demo": "demo"
	},
  "DicomAet": "MODALITY",
  "DicomModalities": {
      "pacs": ["PACS", "orthanc-pacs", 4242], // to perform query-retrieve on the PACS
      "middleman": ["MIDDLEMAN", "orthanc-middleman", 4242] // used as a C-Store destination
  },

  // List of paths to the plugins that are to be loaded into this
  // instance of Orthanc (e.g. "./libPluginTest.so" for Linux, or
  // "./PluginTest.dll" for Windows). These paths can refer to
  // folders, in which case they will be scanned non-recursively to
  // find shared libraries. Backslashes must be either escaped by
  // doubling them, or replaced by forward slashes "/".
  "Plugins" : [
    "/usr/share/orthanc/plugins", "/usr/local/share/orthanc/plugins"
  ]
}
