{
  "Name": "Orthanc-pacs",
	"RemoteAccessAllowed" : true,
	"AuthenticationEnabled" : true,
	"RegisteredUsers" : {
		"demo": "demo"
	},
  "DicomAet": "PACS",
  "DicomModalities": {
      "middleman": ["MIDDLEMAN", "orthanc-middleman", 4242], // used when pushing images to modality
      "modality": ["MODALITY", "orthanc-modality", 4242]     // used when the modality performs a query-retrieve on the pacs
  },

  // List of paths to the plugins that are to be loaded into this
  // instance of Orthanc (e.g. "./libPluginTest.so" for Linux, or
  // "./PluginTest.dll" for Windows). These paths can refer to
  // folders, in which case they will be scanned non-recursively to
  // find shared libraries. Backslashes must be either escaped by
  // doubling them, or replaced by forward slashes "/".
  "Plugins" : [
    "/usr/share/orthanc/plugins", "/usr/local/share/orthanc/plugins"
  ]
}
